PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'use_eeg': 'False'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  expName = auditory_oddball_p300
  keyboardBackend = ioHub
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent sound_1
      sound [set every repeat] = $note
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #Import Netstation library
        from egi_pynetstation.NetStation import NetStation

        if expInfo['use_eeg']:
            #IP address of NetStation - CHANGE THIS TO MATCH THE IP ADDRESS OF YOUR NETSTATION
            IP_ns = '10.10.10.42'

            #IP address of amplifier (if using 300
            #series, this is the same as the IP address of
            #NetStation. If using newer series, the amplifier
            #has its own IP address)
            IP_amp = '10.10.10.51'

            #Port configured for ECI in NetStation - CHANGE THIS IF NEEDED
            port_ns = 55513

            #Start recording and send trigger to show this
            eci_client = NetStation(IP_ns, port_ns)
            eci_client.connect(ntp_ip = IP_amp)
            eci_client.begin_rec()
            eci_client.send_event(event_type = 'STRT', start = 0.0)
      Begin Routine:
        triggerSent = False
      Each Frame:
        #Send trigger to NetStation - Change 'stim' to
        #a meaningful trigger for your experiment OF NO MORE THAN FOUR CHARACTERS. You can
        #also set the trigger in a conditions file.

        if expInfo['use_eeg'] and sound_1.status == STARTED and not triggerSent: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            if note == 'A':
                win.callOnFlip(eci_client.send_event, event_type = 'TRGT', label='TRGT') #Send the trigger, synced to the screen refresh
            else:
                win.callOnFlip(eci_client.send_event, event_type = 'NTRG', label='NTRG')
            triggerSent = True #The trigger has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Experiment:
        if expInfo['use_eeg']:
            #Stop recording and disconnect
            eci_client.end_rec()
            eci_client.disconnect()
      End Routine:
        if expInfo["use_eeg"]:
            eci_client.resync();
  Routine instructions
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will press the "t" key when you hear a "target" sound.

        Do not press anything if you hear other sounds.

        Press the "t" key now to hear the target.
    KeyboardComponent key_resp_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine conclusion
    TextComponent text_instr_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The experiment is now complete.
        Thanks for your participation!
        You may now press the spacebar to end the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent practice_resp
      allowedKeys = 't','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if 't' not in practice_resp.keys:
            practice_loop.finished = True
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the "t" key now to hear the target again.  Press the spacebar to start the experiment
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  Routine block_break
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Block "+str(blocks_loop.thisN+1)+" is now complete. " + "\nPress the spacebar when you are ready to continue."
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine practice
  LoopTerminator practice_loop
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = oddball.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')]),
        OrderedDict([('note', 'C')])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
      Routine trial
    LoopTerminator trials
    Routine block_break
  LoopTerminator blocks_loop
  Routine conclusion
